PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Solo Project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instruction
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    TextComponent text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions

        Welcome to the experiment.
        Your task is to identify the word displayed and press either the → or ← arrow key, based on the prompt shown below the main word.

        Please remember that you may pause the experiment at any time if you feel the need to do so.

        Press the space bar to begin the experiment.
    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text [set every repeat] = Choose the word that matches the task (similar or opposite) using the arrow keys.
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text [set every repeat]:
        $task_type
    TextComponent Target_word
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.5
      text [set every repeat] = $Target
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    TextComponent opt1_text
      letterHeight = 0.05
      pos = (-0.4, -0.2)
      startVal [time (s)] = 0.5
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      text [set every repeat]:
        $Option1
    TextComponent Opt2_text
      letterHeight = 0.05
      pos = (0.4, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $Option2
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = ['left','right']
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine trial_2
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    PolygonComponent Fixation1
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $task_type_ns
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      text = You shall continue the task. 
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    TextComponent Target_
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 1.0
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      text [set every repeat]:
        $Target_ns
    TextComponent Option01
      letterHeight = 0.05
      pos = (-0.4, -0.2)
      startVal [time (s)] = 1.0
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      text [set every repeat]:
        $Option1_ns
    TextComponent Option02
      letterHeight = 0.05
      pos = (0.4, -0.2)
      startVal [time (s)] = 1.0
      text [set every repeat] = $Option2_ns
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = corr_resp_ns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Thankyou
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    TextboxComponent textbox_3
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for participating in the study!

        Your response is appreciated.
  Routine Audio
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    SoundComponent sound1
      forceEndRoutine = False
      sound [set every repeat] = C:/Users/NAIRP/Downloads/New Project.mp3
      startVal [time (s)] = 0
      syncScreenRefresh = False
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        ""
  Routine break_2
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You have been doing great so far!
        Take a short breathing break, and press the space bar whenever you're ready to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = emo_conditions_set1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Target', 'Angry'), ('Option1', 'Irate'), ('Option2', 'Calm'), ('corr_similar', 'Irate'), ('corr_opposite', 'Calm'), ('task_type', 'opposite'), ('corr_resp', 'Calm')]),
      OrderedDict([('Target', 'Bright'), ('Option1', 'Luminous'), ('Option2', 'Dim'), ('corr_similar', 'Luminous'), ('corr_opposite', 'Dim'), ('task_type', 'opposite'), ('corr_resp', 'Dim')]),
      OrderedDict([('Target', 'Easy'), ('Option1', 'Effortless'), ('Option2', 'Arduous'), ('corr_similar', 'Effortless'), ('corr_opposite', 'Arduous'), ('task_type', 'similar'), ('corr_resp', 'Effortless')]),
      OrderedDict([('Target', 'Honest'), ('Option1', 'Sincere'), ('Option2', 'Deceitful'), ('corr_similar', 'Sincere'), ('corr_opposite', 'Deceitful'), ('task_type', 'opposite'), ('corr_resp', 'Deceitful')]),
      OrderedDict([('Target', 'Calm'), ('Option1', 'Serene'), ('Option2', 'Agitated'), ('corr_similar', 'Serene'), ('corr_opposite', 'Agitated'), ('task_type', 'opposite'), ('corr_resp', 'Agitated')]),
      OrderedDict([('Target', 'Hard'), ('Option1', 'Arduous'), ('Option2', 'Soft'), ('corr_similar', 'Arduous'), ('corr_opposite', 'Soft'), ('task_type', 'opposite'), ('corr_resp', 'Soft')]),
      OrderedDict([('Target', 'Old'), ('Option1', 'Ancient'), ('Option2', 'Modern'), ('corr_similar', 'Ancient'), ('corr_opposite', 'Modern'), ('task_type', 'similar'), ('corr_resp', 'Ancient')])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
    Routine trial
  LoopTerminator trials
  Routine break_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = No sound condition.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('Target_ns', 'Angry'), ('Option1_ns', 'Irate'), ('Option2_ns', 'Calm'), ('corr_similar_ns', 'Irate'), ('corr_opposite_ns', 'Calm'), ('task_type_ns', 'opposite'), ('corr_resp_ns', 'Calm')]),
      OrderedDict([('Target_ns', 'Bright'), ('Option1_ns', 'Luminous'), ('Option2_ns', 'Dim'), ('corr_similar_ns', 'Luminous'), ('corr_opposite_ns', 'Dim'), ('task_type_ns', 'opposite'), ('corr_resp_ns', 'Dim')]),
      OrderedDict([('Target_ns', 'Easy'), ('Option1_ns', 'Effortless'), ('Option2_ns', 'Arduous'), ('corr_similar_ns', 'Effortless'), ('corr_opposite_ns', 'Arduous'), ('task_type_ns', 'similar'), ('corr_resp_ns', 'Effortless')]),
      OrderedDict([('Target_ns', 'Honest'), ('Option1_ns', 'Sincere'), ('Option2_ns', 'Deceitful'), ('corr_similar_ns', 'Sincere'), ('corr_opposite_ns', 'Deceitful'), ('task_type_ns', 'opposite'), ('corr_resp_ns', 'Deceitful')]),
      OrderedDict([('Target_ns', 'Calm'), ('Option1_ns', 'Serene'), ('Option2_ns', 'Agitated'), ('corr_similar_ns', 'Serene'), ('corr_opposite_ns', 'Agitated'), ('task_type_ns', 'opposite'), ('corr_resp_ns', 'Agitated')]),
      OrderedDict([('Target_ns', 'Hard'), ('Option1_ns', 'Arduous'), ('Option2_ns', 'Soft'), ('corr_similar_ns', 'Arduous'), ('corr_opposite_ns', 'Soft'), ('task_type_ns', 'opposite'), ('corr_resp_ns', 'Soft')]),
      OrderedDict([('Target_ns', 'Old'), ('Option1_ns', 'Ancient'), ('Option2_ns', 'Modern'), ('corr_similar_ns', 'Ancient'), ('corr_opposite_ns', 'Modern'), ('task_type_ns', 'similar'), ('corr_resp_ns', 'Ancient')])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
    Routine trial_2
  LoopTerminator trials_2
  Routine Thankyou
