PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Stroop task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixaion
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $Colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $Word
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'r','b'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome!
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  Routine Thankyou
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thankyou!
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Cond.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'Word': 'RED', 'Colour': 'Red', 'Stimulus_cond': 'C', 'correct_res': 'r'},
      {'Word': 'RED', 'Colour': 'Blue', 'Stimulus_cond': 'I', 'correct_res': 'b'},
      {'Word': 'BLUE', 'Colour': 'Blue', 'Stimulus_cond': 'C', 'correct_res': 'b'},
      {'Word': 'BLUE', 'Colour': 'Red', 'Stimulus_cond': 'I', 'correct_res': 'r'}]
    Routine trial
  LoopTerminator trials
  Routine Thankyou
